opentrons/protocol-designer 5.2.3
schemaVersion: 4
protocolName: Test Protocol
author: Indicai Genomics
description: Test the app and get familiar with the UI
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
modules:
  magneticModuleV2: {slot: 1}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 2}
  Cell stock: {definitionId: opentrons/corning_12_wellplate_6.9ml_flat/1, slot: 11}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: magneticModuleV2}
  Reagents: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, slot: 10}
  Treatments: {definitionId: opentrons/corning_12_wellplate_6.9ml_flat/1, slot: 7}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 3}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_tiprack_1000ul/1
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Test Water: {description: Wash solution, serialize: true}
  - Test Cells: {description: Cells, serialize: true}
  - Test Broth: {description: Growth medium, serialize: true}
  - Reagent A: {description: Reagent, serialize: true}
  - Reagent B: {description: Reagent, serialize: true}
  - Treatment A: {description: A special chemical, serialize: true}
  - Trteatment B: {description: A special chemical, serialize: true}
ingredLocations:
  Cell stock:
    Test Cells {volume: 1000}: A4-C4
    Test Water {volume: 1000}: A1-C1, A2-C2, A3-C3
  Reagents:
    Reagent A {volume: 3000}: A3
    Reagent B {volume: 3000}: A2
    Test Water {volume: 3000}: A1
    Test Water {volume: 2000}: B1-B3
  Treatments:
    Treatment A {volume: 1000}: A1, C1, B1
    Trteatment B {volume: 1000}: A2, C2, B2
    Test Water {volume: 1000}: A3, C3, B3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: always
  aspirate_labware: Cell stock
  aspirate_wells: A4-C4
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 500
  aspirate_mmFromBottom: 1
  dispense_labware: Cell stock
  dispense_wells: A3-C3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: never
  aspirate_labware: Cell stock
  aspirate_wells: A3-C3
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 1000
  aspirate_mmFromBottom: 1
  dispense_labware: Cell stock
  dispense_wells: A2-C2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: never
  aspirate_labware: Cell stock
  aspirate_wells: A2-C2
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 1000
  aspirate_mmFromBottom: 1
  dispense_labware: Cell stock
  dispense_wells: A1-C1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 2000
  path: single
  changeTip: perSource
  aspirate_labware: Cell stock
  aspirate_wells: A1-C1
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  aspirate_mmFromBottom: 1
  dispense_labware: Reagents
  dispense_wells: A1-A3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1-A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Treatments
  dispense_wells: A4-C4
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Treatments
  aspirate_wells: A4-C4
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  aspirate_mmFromBottom: 1
  dispense_labware: Treatments
  dispense_wells: A3-C3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Treatments
  aspirate_wells: A4-C4
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  aspirate_mmFromBottom: 1
  dispense_labware: Treatments
  dispense_wells: A2-C2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Treatments
  aspirate_wells: A2-C2
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  aspirate_mmFromBottom: 1
  dispense_labware: Treatments
  dispense_wells: A1-C1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 80
  path: single
  changeTip: perSource
  aspirate_labware: Treatments
  aspirate_wells: A1-C1, A2-C2, A3-C3, A4-C4
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-D1, A2-D2, A3-D3
  dispense_mmFromBottom: 0.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 7
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p1000_single_gen2, labware: Opentrons 96 Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single_gen2, volume: 500, labware: Cell stock, well: A4, offsetFromBottomMm: 1, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 500, labware: Cell stock, well: A4, offsetFromBottomMm: 1, flowRate: 137.35}
- aspirate: {pipette: p1000_single_gen2, volume: 500, labware: Cell stock, well: A4, offsetFromBottomMm: 1, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 500, labware: Cell stock, well: A4, offsetFromBottomMm: 1, flowRate: 137.35}
- aspirate: {pipette: p1000_single_gen2, volume: 1000, labware: Cell stock, well: A4, offsetFromBottomMm: 1, flowRate: 137.35}
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